PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = IAT
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent label_left
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
      text = 积极词 - 按E键
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    TextComponent label_right
      letterHeight = 0.05
      pos = (0.4, 0.4)
      startVal [time (s)] = 0.0
      text = 消极词 - 按I键
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    PolygonComponent polygon_2
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 1
      text [set every repeat] = $stims
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    KeyboardComponent key_resp_5
      allowedKeys = 'e','i'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine 指导语
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        你好，欢迎参加本实验！
        本测试为一项快速分类任务，一共包含7个部分。
        需要你进行分类的词语有：
        积极词：美丽，漂亮，喜爱，愉悦
        消极词：丑陋，恶心，厌恶，难受
        花：玫瑰，牡丹，丁香，月季
        虫：蚂蚁，蜈蚣，蝗虫，蚯蚓
        请你先熟悉一下这些词语。
        为了便于你区分，在测试中：
        积极词或消极词用白色显示，花或虫用绿色显示
        每一部分测试开始前，会有详细的任务说明。
        如果你已经准备好，
        请按空格键进入第一部分的测试说明

        如果有任何疑问，请联系实验员
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Block结束语
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        本部分测试结束
        按空格键继续
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine 注视点
    PolygonComponent polygon
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine 刺激
    TextComponent lable_left
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $leftLabel
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    TextComponent lable_right
      letterHeight = 0.05
      pos = (0.4, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rightLabel
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    TextComponent stimsText
      letterHeight = 0.05
      startVal [time (s)] = 1
      text = $stims
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    KeyboardComponent key_resp_3
      allowedKeys = 'e','i'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1
      storeCorrect = True
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  Routine Block指导语
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $InstrText
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine 结束语
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        所有测试结束！谢谢你的参与！
        请按ESC退出程序
  Routine trial_2
Flow
  Routine 指导语
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = IAT_block_loop.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'block_loop': 'block1.xlsx', 'reps': 3, 'leftLabel': '积极词-按E键', 'rightLabel': '消极词-按I键', 'InstrText': '接下来将进行第一部分的测试\n请你将左手和右手的食指分别放在E和I按键上。\n一会屏幕中会先短暂出现一个十字，请注视。\n十字消失后会出现一个词语（积极词或消极词），\n请在保证正确率的前提下快速对其进行分类。\n具体规则为：积极词-按E键；消极词-按I键\n如果你已经明白规则，请按空格键开始测试\n如果你有任何疑问，请咨询实验员'},
      {'block_loop': 'block2.xlsx', 'reps': 3, 'leftLabel': '花-按E键', 'rightLabel': '虫-按I键', 'InstrText': '接下来将进行第二部分的测试\n请你将左手和右手的食指分别放在E和I按键上。\n该部分流程与刚才相同，只是出现的词语和规则稍有变化\n词语为花或者虫\n具体规则为：花-按E键；虫-按I键\n如果你已经明白规则，请按空格键开始测试\n如果你有任何疑问，请咨询实验员'},
      {'block_loop': 'block34.xlsx', 'reps': 2, 'leftLabel': '积极词或花-按E键', 'rightLabel': '消极词或虫-按I键', 'InstrText': '接下来将进行第三部分的测试\n请你将左手和右手的食指分别放在E和I按键上。\n该部分流程与刚才相同，只是前两部分的词语都会出现\n具体规则为：积极词或花-按E键；消极词或虫-按I键\n如果你已经明白规则，请按空格键开始测试\n如果你有任何疑问，请咨询实验员'},
      {'block_loop': 'block34.xlsx', 'reps': 4, 'leftLabel': '积极词或花-按E键', 'rightLabel': '消极词或虫-按I键', 'InstrText': '接下来将进行第四部分的测试\n请你将左手和右手的食指分别放在E和I按键上。\n该部分与第三部分完全相同，没有变化\n具体规则为：积极词或花-按E键；消极词或虫-按I键\n如果你已经明白规则，请按空格键开始测试\n如果你有任何疑问，请咨询实验员'},
      {'block_loop': 'block5.xlsx', 'reps': 3, 'leftLabel': '虫词-按E键', 'rightLabel': '花词-按I键', 'InstrText': '接下来将进行第五部分的测试\n请你将左手和右手的食指分别放在E和I按键上。\n该部分出现的词语只有花或虫，但是调换了按键\n具体规则为：虫-按E键；花-按I键\n如果你已经明白规则，请按空格键开始测试\n如果你有任何疑问，请咨询实验员'},
      {'block_loop': 'block67.xlsx', 'reps': 2, 'leftLabel': '积极词或虫-按E键', 'rightLabel': '消极词或花-按I键', 'InstrText': '接下来将进行第六部分的测试\n请你将左手和右手的食指分别放在E和I按键上。\n该部分中，所有词语都会出现。\n具体规则为：积极词或虫-按E键；消极词或花-按I键\n如果你已经明白规则，请按空格键开始测试\n如果你有任何疑问，请咨询实验员'}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
    Routine Block指导语
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $block_loop
      loopType = random
      nReps = reps
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      Routine trial
    LoopTerminator trials
    Routine Block结束语
  LoopTerminator blocks
  Routine 结束语
