PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = go_nogo
  keyboardBackend = ioHub
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Routines
  Routine 指导语
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        欢迎参加本次实验。
        当出现白色三角形和长方形时，
        请用右手快速且准确的按键盘J键；
        当出现紫色三角形和长方形时，
        请不要按任何键。
        明白后按任意键进入实验。
    KeyboardComponent key_resp
      allowedKeys = []
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine 注视点
    PolygonComponent polygon
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = rt1
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        rt1 = 0
      Begin Routine:
        from numpy.random import shuffle
        d = [0.5,0.6,0.7,0.8,0.9,1.0]
        shuffle(d)
        rt1 = d.pop()
        thisExp.addData("rt1",rt1)
  Routine 刺激
    ImageComponent image
      image [set every repeat] = $pic
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    KeyboardComponent key_resp_2
      allowedKeys = 'j','J'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine 空屏
    PolygonComponent polygon_2
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine 指导语2
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        欢迎参加本次实验。
        当出现白色三角形和长方形时，
        请用左手快速且准确的按键盘F键；
        当出现紫色三角形和长方形时，
        请不要按任何键。
        明白后按任意键进入实验。
    KeyboardComponent key_resp_3
      allowedKeys = []
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine 刺激2
    ImageComponent image_2
      image [set every repeat] = $pic
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    KeyboardComponent key_resp_4
      allowedKeys = 'f','F'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine 结束语
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 实验结束，非常感谢您的参加！
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Flow
  Routine 指导语
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = loop.xlsx
    isTrials = False
    loopType = fullRandom
    nReps = 20
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    conditions:
      [{'pic': 'image\\w_tri'},
      {'pic': 'image\\w_rect'},
      {'pic': 'image\\p_tri'},
      {'pic': 'image\\p_rect'},
      {'pic': 'image\\w_tri'},
      {'pic': 'image\\w_rect'},
      {'pic': 'image\\w_tri'},
      {'pic': 'image\\w_rect'}]
    Routine 注视点
    Routine 刺激
    Routine 空屏
  LoopTerminator trials
  Routine 指导语2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = loop.xlsx
    loopType = fullRandom
    nReps = 20
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    conditions:
      [{'pic': 'image\\w_tri'},
      {'pic': 'image\\w_rect'},
      {'pic': 'image\\p_tri'},
      {'pic': 'image\\p_rect'},
      {'pic': 'image\\w_tri'},
      {'pic': 'image\\w_rect'},
      {'pic': 'image\\w_tri'},
      {'pic': 'image\\w_rect'}]
    Routine 注视点
    Routine 刺激2
    Routine 空屏
  LoopTerminator trials_2
  Routine 结束语
