PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = mental_rotation
  keyboardBackend = ioHub
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Routines
  Routine 指导语
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        欢迎参加心理旋转实验。
        实验中将呈现“F”和其镜像字母。
        字母“F”被认为是“正”的。
        字母“F”的镜像被认为是“反”的。
        请观察屏幕上的字母“F”，如果是正的请按“d”键，
        如果是反的，请按“k”键。
        若已明白实验要求，请按"n"键继续。
        （实验前，请将输入法切换到英文状态）
    KeyboardComponent key_resp
      allowedKeys = 'n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine 注视点
    PolygonComponent polygon
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine 刺激
    ImageComponent image
      image [set every repeat] = $pic
      ori [set every repeat] = orientation
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    KeyboardComponent key_resp_2
      allowedKeys = 'd','k'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      storeCorrect = True
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  Routine 结束语
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 实验结束，感谢您参加本次实验
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    KeyboardComponent key_resp_3
      allowedKeys = 'n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine 指导语
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = E:/Project/psychopy_fanshi/mental_rotation/loop.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'image': 'F.png', 'mirrored': 0, 'orientation': 0, 'corrAns': 'd'},
      {'image': 'F.png', 'mirrored': 0, 'orientation': 20, 'corrAns': 'd'},
      {'image': 'F.png', 'mirrored': 0, 'orientation': 40, 'corrAns': 'd'},
      {'image': 'F.png', 'mirrored': 0, 'orientation': 60, 'corrAns': 'd'},
      {'image': 'F.png', 'mirrored': 0, 'orientation': 80, 'corrAns': 'd'},
      {'image': 'F.png', 'mirrored': 0, 'orientation': 100, 'corrAns': 'd'},
      {'image': 'F.png', 'mirrored': 0, 'orientation': 120, 'corrAns': 'd'},
      {'image': 'F.png', 'mirrored': 0, 'orientation': 140, 'corrAns': 'd'},
      {'image': 'F.png', 'mirrored': 0, 'orientation': 160, 'corrAns': 'd'},
      {'image': 'F.png', 'mirrored': 0, 'orientation': 180, 'corrAns': 'd'},
      {'image': 'FR.png', 'mirrored': 1, 'orientation': 0, 'corrAns': 'k'},
      {'image': 'FR.png', 'mirrored': 1, 'orientation': 20, 'corrAns': 'k'},
      {'image': 'FR.png', 'mirrored': 1, 'orientation': 40, 'corrAns': 'k'},
      {'image': 'FR.png', 'mirrored': 1, 'orientation': 60, 'corrAns': 'k'},
      {'image': 'FR.png', 'mirrored': 1, 'orientation': 80, 'corrAns': 'k'},
      {'image': 'FR.png', 'mirrored': 1, 'orientation': 100, 'corrAns': 'k'},
      {'image': 'FR.png', 'mirrored': 1, 'orientation': 120, 'corrAns': 'k'},
      {'image': 'FR.png', 'mirrored': 1, 'orientation': 140, 'corrAns': 'k'},
      {'image': 'FR.png', 'mirrored': 1, 'orientation': 160, 'corrAns': 'k'},
      {'image': 'FR.png', 'mirrored': 1, 'orientation': 180, 'corrAns': 'k'}]
    Routine 注视点
    Routine 刺激
  LoopTerminator trials
  Routine 结束语
